PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2022.2.1
  Window size (pixels) = [1600, 700]
  expName = final project experiment
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        **Welcome to the experiment !**
        Thank you for taking the time to participate in this study.
        You may exit any time by pressing the ESC key.
        This experiment requires headphones.
        Please make sure you are wearing headphone before continuing.Also,
        please try to reduce background noise as it might negatively affect the results of this experiment.
        You are suppose to press 'down'key if you hear a sound and 'up' key if you not heard any sound.
        Thank you for your cooperation.
        Press SPACE to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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  Routine Audio
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
            freq = 200;
            corrAns = 'up'
        else:
            freq = 500
            corrAns = 'down'
      End Routine:
        trials.addData('freq' ,freq)

        if random() > 0.5:
            freq = 200;
            corrAns = 'up'
        else:
            freq = 500
            corrAns = 'down'
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    SoundComponent sound_1
      sound [set every repeat] = $freq
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.5
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    KeyboardComponent key_resp_3
      allowedKeys = 'up' , 'down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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  Routine Thankyou
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Thank you for your enthusiastic participation!
        We couldn't have had such a fantastic time without you :) !

        Please press ESC to end the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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Flow
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = final pro.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{'freq': 200},
      {'freq': 200},
      {'freq': 200},
      {'freq': 200},
      {'freq': 500},
      {'freq': 500},
      {'freq': 500}]
    Routine Audio
  LoopTerminator trials
  Routine Thankyou
